#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    simpledatadummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummyinstreamer:
        module.Class: 'data_instream_dummy.InStreamDummy'
        digital_channels:  # optional, must provide at least one digital or analog channel
            - 'digital 1'
            - 'digital 2'
            - 'digital 3'
        analog_channels:  # optional, must provide at least one digital or analog channel
            - 'analog 1'
            - 'analog 2'
        digital_event_rates:  # optional, must have as many entries as digital_channels or just one
            - 10
            - 1000
            - 10000
        analog_amplitudes:  # optional, must have as many entries as analog_channels or just one
            - 5
            - 10


logic:
    timeserieslogic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        max_frame_rate: 20
        connect:
            _streamer_con: 'mydummyinstreamer'
            _savelogic_con: 'savelogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'mydummyscanner'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'
        #additional_fit_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    my_module:
        # module.Class: 'testgui.TestGui'
        module.Class: 'time_series1.time_series_gui.TimeSeriesGui'
        connect:
            _time_series_logic_con: 'timeserieslogic'

